PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data/expName'
  Experiment info = {'participant': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = visual_feedback
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Try pressing the buttons on the button box,
        and watch the marker on the rating scale move in response.
    RatingScaleComponent rating
      customize_everything = choices = ['1','2','3','4','5'], stretch=2.0, textSize=1, showAccept=False, maxTime=5, respKeys=['1','2','3','4','5']
      forceEndRoutine = True
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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  Routine introduction
    TextComponent introduction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        This task will display a rating scale.

        The rating scale has numbers 1 to 5,
        1 corresponds to your thumb, 2 corresponds to your index finger, and so on.

        On the next screen, try pressing the buttons
        on the button box, and watch the marker on the rating scale move in response.
Flow
  Routine introduction
  Routine trial
